CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:34
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|/share/data/cellprofiler/jonne/cpoutput/combchem
    Name of the file:p00025-U2OS-24h-L1.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:2|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notes:['TEXT']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
    Select the input image:HOECHST
    Name the output image:preillumHOECHST
    Select the illumination function:ICF_HOECHST
    Select how the illumination function is applied:Divide
    Select the input image:MITO
    Name the output image:preillumMITO
    Select the illumination function:ICF_MITO
    Select how the illumination function is applied:Divide
    Select the input image:PHAandWGA
    Name the output image:preillumPHAandWGA
    Select the illumination function:ICF_PHAandWGA
    Select how the illumination function is applied:Divide
    Select the input image:SYTO
    Name the output image:preillumSYTO
    Select the illumination function:ICF_SYTO
    Select how the illumination function is applied:Divide
    Select the input image:CONC
    Name the output image:preillumCONC
    Select the illumination function:ICF_CONC
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

ImageMath:[module_num:3|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:illumHOECHST
    Image or measurement?:Image
    Select the first image:preillumHOECHST
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:4|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:illumMITO
    Image or measurement?:Image
    Select the first image:preillumMITO
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:5|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:illumPHAandWGA
    Image or measurement?:Image
    Select the first image:preillumPHAandWGA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:6|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:illumSYTO
    Image or measurement?:Image
    Select the first image:preillumSYTO
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:7|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:illumCONC
    Image or measurement?:Image
    Select the first image:preillumCONC
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Threshold:[module_num:8|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notes:['TEXT']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
    Select the input image:illumHOECHST
    Name the output image:LargeBrightArtefacts_detect
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:9|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notes:['TEXT?']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
    Select the input image:LargeBrightArtefacts_detect
    Name the primary objects to be identified:LargeBrightArtefacts_identify
    Typical diameter of objects, in pixel units (Min,Max):150,5000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.9,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:10|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notes:['TEXT?']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
    Select the input objects:LargeBrightArtefacts_identify
    Name the output objects:LargeBrightArtefacts_enlarge
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:100
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
MaskImage:[module_num:11|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
    Select the input image:illumHOECHST
    Name the output image:illumHOECHST_ExcludedLargeBrightArtefacts
    Use objects or an image as a mask?:Objects
    Select object for mask:LargeBrightArtefacts_enlarge
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    Invert the mask?:Yes

MaskImage:[module_num:12|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
    Select the input image:illumPHAandWGA
    Name the output image:illumPHAandWGA_ExcludedLargeBrightArtefacts
    Use objects or an image as a mask?:Objects
    Select object for mask:LargeBrightArtefacts_enlarge
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    Invert the mask?:Yes

CorrectIlluminationCalculate:[module_num:13|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
    Select the input image:illumPHAandWGA_ExcludedLargeBrightArtefacts
    Name the output image:PHAandWGAcorrection
    Select how the illumination function is calculated:Background
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    Block size:50
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:14|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
    Select the input image:illumPHAandWGA_ExcludedLargeBrightArtefacts
    Name the output image:illumPHAandWGA_corrected
    Select the illumination function:PHAandWGAcorrection
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

RunCellpose:[module_num:15|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
    Select the input image:illumHOECHST_ExcludedLargeBrightArtefacts
    Expected object diameter:50
    Detection mode:nuclei
    Name the output object:nuclei
    Use GPU:No
    Use averaging:Yes
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.8
    Cell probability threshold:0.0
    GPU memory share for each worker:0.0
    Stitch Threshold:0.0
    Use 3D:15
    Minimum size:5
    Z rescaling factor (anisotropy):0.0
    Use Omnipose for mask reconstruction:No
    Invert images:No

RunCellpose:[module_num:16|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
    Select the input image:illumPHAandWGA_corrected
    Expected object diameter:150
    Detection mode:cyto2
    Name the output object:precells
    Use GPU:No
    Use averaging:Yes
    Supply nuclei image as well?:Yes
    Select the nuclei image:illumHOECHST_ExcludedLargeBrightArtefacts
    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.8
    Cell probability threshold:0.0
    GPU memory share for each worker:0.0
    Stitch Threshold:0.0
    Use 3D:15
    Minimum size:50
    Z rescaling factor (anisotropy):0.0
    Use Omnipose for mask reconstruction:No
    Invert images:No

FilterObjects:[module_num:17|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notes:['remove cells from cellpose that touch borders']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
    Select the objects to filter:precells
    Name the output objects:cells
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a seperate set?:No
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
RelateObjects:[module_num:18|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
    Parent objects:cells
    Child objects:nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
IdentifyTertiaryObjects:[module_num:19|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notes:['TEXT']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
    Select the larger identified objects:cells
    Select the smaller identified objects:nuclei
    Name the tertiary objects to be identified:cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:20|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
    Select images to measure:illumCONC, illumHOECHST, illumMITO, illumPHAandWGA, illumSYTO
    Select objects to measure:cells, cytoplasm, nuclei

MeasureObjectIntensityDistribution:[module_num:21|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
    Select images to measure:illumCONC, illumHOECHST, illumMITO, illumPHAandWGA, illumSYTO
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:nuclei
    Object to use as center?:These objects
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    Select objects to measure:cells
    Object to use as center?:These objects
    Select objects to use as centers:nuclei
    Select objects to measure:cytoplasm
    Object to use as center?:These objects
    Select objects to use as centers:nuclei
    Scale the bins?:No
    Number of bins:4
    Maximum radius:100

MeasureObjectNeighbors:[module_num:22|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
    Select objects to measure:nuclei
    Select neighboring objects to measure:nuclei
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:23|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
    Select objects to measure:cells
    Select neighboring objects to measure:cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:24|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
    Select object sets to measure:cells, cytoplasm, nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureColocalization:[module_num:25|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
    Select images to measure:illumCONC, illumHOECHST, illumMITO, illumPHAandWGA, illumSYTO
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:cells, cytoplasm, nuclei
    Run all metrics?:No
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:Yes
    Calculate the Rank Weighted Colocalization coefficients?:Yes
    Calculate the Overlap coefficients?:Yes
    Calculate the Manders coefficients using Costes auto threshold?:No
    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:26|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
    Select images to measure:illumCONC, illumHOECHST, illumMITO, illumPHAandWGA, illumSYTO
    Measure within objects?:Yes
    Select objects to measure:cells, cytoplasm, nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

GrayToColor:[module_num:27|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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:colorICF_RGB_MPH
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    Hidden:3
    Image name:illumMITO
    Color:#ff0000
    Weight:1.0
    Image name:illumPHAandWGA
    Color:#00ff00
    Weight:1.0
    Image name:illumHOECHST
    Color:#0000ff
    Weight:1.0

SaveImages:[module_num:28|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:colorICF_RGB_MPH
    Select method for constructing file names:Single name
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    Enter single file name:icfRGB_MPH_\g<Barcode>_\g<Well>_site\g<Site>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|img/icfRGB
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

OverlayOutlines:[module_num:29|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:colorICF_RGB_MPH
    Name the output image:outlines_colorICF_RGB_MPH
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:yellow
    Select objects to display:nuclei
    Select outline color:#FF0096
    Select objects to display:cells

SaveImages:[module_num:30|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:outlines_colorICF_RGB_MPH
    Select method for constructing file names:Single name
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    Enter single file name:outlines_colorICF_RGB_MPH_\g<Barcode>_\g<Well>_site\g<Site>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|img/outlinesONcolorICF
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

DisplayDataOnImage:[module_num:31|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
    Display object or image measurements?:Object
    Select the input objects:nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:outlines_colorICF_RGB_MPH
    Text color:#FFA500
    Name the output image that has the measurements displayed:outlines_ObjectNumber
    Font size (points):9
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:32|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
    Display object or image measurements?:Object
    Select the input objects:cells
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:outlines_ObjectNumber
    Text color:#E31EE1
    Name the output image that has the measurements displayed:outlines_ObjectNumber2
    Font size (points):9
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:33|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
    Select the type of image to save:Image
    Select the image to save:outlines_ObjectNumber2
    Select method for constructing file names:Single name
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    Enter single file name:objectnr_\g<Barcode>_\g<Well>_site\g<Site>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|img/objnumber
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:34|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notes:['TEXT']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:Null
    Add a prefix to file names?:Yes
    Filename prefix:featICF_
    Overwrite existing files without warning?:Yes
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