CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|sarscov/outputCP407/image_set_lists
    Name of the file:ImageSetList_Exp4-MRC5-bonus-CPnoAB2.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

Threshold:[module_num:2|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notes:['TEXT']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
    Select the input image:HOECHST
    Name the output image:binaryHOECHST
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.025
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
MeasureImageAreaOccupied:[module_num:3|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
    Measure the area occupied by:Binary Image
    Select binary images to measure:binaryHOECHST
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
CalculateMath:[module_num:4|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notes:['TEXT']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
    Name the output measurement:percent_AreaCoveredByHOECHST
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_binaryHOECHST
    Multiply the above operand by:100.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_TotalArea_binaryHOECHST
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
FlagImage:[module_num:5|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notes:['1 = fails;', '0 = passes;']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
    Hidden:1
    Hidden:1
    Name the flag's category:icf_flag
    Name the flag:skipIMG_nuclei<=5%
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:Math_percent_AreaCoveredByHOECHST
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:5
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    Ignore flag skips on last cycle?:No

CorrectIlluminationCalculate:[module_num:6|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notes:['TEXT']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
    Select the input image:HOECHST
    Name the output image:ICFregular_hoechst
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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notes:['TEXT']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
    Select the input image:MITO
    Name the output image:ICFregular_mito
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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notes:['TEXT']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
    Select the input image:PHAandWGA
    Name the output image:ICFregular_phaANDwga
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:9|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notes:['TEXT']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
    Select the input image:SYTO
    Name the output image:ICFregular_syto
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:10|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notes:['TEXT']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
    Select the input image:CONC
    Name the output image:ICFregular_conc
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
SaveImages:[module_num:11|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notes:['TEXT']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
    Select the type of image to save:Image
    Select the image to save:ICFregular_hoechst
    Select method for constructing file names:Single name
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    Enter single file name:ICF_HOECHST
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    Saved file format:npy
    Output file location:Default Output Folder|illum
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:12|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notes:['TEXT']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
    Select the type of image to save:Image
    Select the image to save:ICFregular_mito
    Select method for constructing file names:Single name
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    Enter single file name:ICF_MITO
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    Saved file format:npy
    Output file location:Default Output Folder|illum
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:13|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notes:['TEXT']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
    Select the type of image to save:Image
    Select the image to save:ICFregular_phaANDwga
    Select method for constructing file names:Single name
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    Enter single file name:ICF_PHAandWGA
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    Saved file format:npy
    Output file location:Default Output Folder|illum
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:14|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notes:['TEXT']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
    Select the type of image to save:Image
    Select the image to save:ICFregular_syto
    Select method for constructing file names:Single name
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    Enter single file name:ICF_SYTO
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    Saved file format:npy
    Output file location:Default Output Folder|illum
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:15|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notes:['TEXT']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
    Select the type of image to save:Image
    Select the image to save:ICFregular_conc
    Select method for constructing file names:Single name
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    Enter single file name:ICF_CONC
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    Saved file format:npy
    Output file location:Default Output Folder|illum
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:16|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notes:['TEXT']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:Null
    Add a prefix to file names?:Yes
    Filename prefix:icf_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:images_\g<Barcode>.csv
    Use the object name for the file name?:No
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
    File name:experiment_\g<Barcode>.csv
    Use the object name for the file name?:No
